PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = f"data/sub-{expInfo['participant']}/sub-{expInfo['participant']}_{expName}_{expInfo['date']}"
  Experiment info = {'participant': '', 'resume': 'n'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  color = black
  expName = movie_ratings_task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $movie_file
      pos = (0, 0.1)
      size = (1.78, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (0,1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent key_slider
      Code Type = Py
      Begin Routine:
        slider_min = min(slider.ticks)
        slider_max = max(slider.ticks)

        # start in the middle / at your init value
        slider.markerPos = 5
        slider.recordRating(slider.markerPos, rt=0)

        # prevents mouse control of the slider
        slider.readOnly = True

        defaultKeyboard.clearEvents()
      Each Frame:
        theseKeys = defaultKeyboard.getKeys(
            keyList=['left', 'right'],
            ignoreKeys=['escape'],
            waitRelease=False,
            clear=True
        )

        for key in theseKeys:
            if key.name == 'left':
                slider.markerPos = max(slider_min, slider.markerPos - 1)
            elif key.name == 'right':
                slider.markerPos = min(slider_max, slider.markerPos + 1)

            # store the current slider position as the current rating
            slider.recordRating(slider.markerPos, rt=key.rt)
    ImageComponent smile_image
      image = images/high_battery.png
      pos = (0.6, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent frown_image
      image = images/low_battery.png
      pos = (-0.6, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent checkpoint
      Code Type = Py
      End Routine:
        completed_trial_index = resume_start_index + trials.thisN + 1

        progress = {
            "participant": participant_id,
            "subject_stim_file": subject_stim_file,
            "next_trial_index": completed_trial_index,
            "last_completed_movie": movie_file,
            "complete": completed_trial_index >= len(all_trials),
        }
        with open(progress_file, "w") as f:
            json.dump(progress, f, indent=2)
  Routine end
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the experiment!

        Please let the experimenter know you have finished.

        You will be awarded credit ASAP.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent mark_complete
      Code Type = Py
      End Experiment:
        if os.path.exists(progress_file):
            with open(progress_file, "r") as f:
                progress = json.load(f)

            progress["complete"] = True
            progress["next_trial_index"] = len(all_trials)

            with open(progress_file, "w") as f:
                json.dump(progress, f, indent=2)
  Routine next
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You can continue on to the next movie now or take a short break. Remember you are welcome to adjust the volume whenever you like.

        Press Spacebar to proceed to next movie
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_1
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    CodeComponent make_stims
      Code Type = Py
      Begin Experiment:
        from psychopy import data
        import csv
        import random

        participant_id = str(expInfo['participant']).strip() or "TEST"
        participant_id = "".join(
            ch if ch.isalnum() or ch in ("-", "_") else "_"
            for ch in participant_id
        )

        exp_dir = _thisDir if "_thisDir" in globals() else os.getcwd()
        movie_list_file = os.path.join(exp_dir, "movie_list.xlsx")
        stims_dir = os.path.join(exp_dir, "stims")
        os.makedirs(stims_dir, exist_ok=True)

        subject_stim_file = os.path.join(stims_dir, f"sub-{participant_id}_stims.csv")

        if not os.path.exists(subject_stim_file):
            source_rows = data.importConditions(movie_list_file)

            scan_names = list(source_rows[0].keys())
            scan_sets = {scan_name: [] for scan_name in scan_names}

            for row in source_rows:
                for scan_name in scan_names:
                    source_movie_path = row[scan_name]
                    if source_movie_path not in ("", None):
                        scan_sets[scan_name].append(source_movie_path)

            rng = random.Random(participant_id)

            randomized_scan_names = scan_names[:]
            rng.shuffle(randomized_scan_names)

            trial_rows = []
            for set_order, scan_name in enumerate(randomized_scan_names, start=1):
                movies = scan_sets[scan_name][:]
                rng.shuffle(movies)

                for movie_order_within_set, shuffled_movie_path in enumerate(movies, start=1):
                    trial_rows.append({
                        "scan_set": scan_name,
                        "set_order": set_order,
                        "movie_order_within_set": movie_order_within_set,
                        "movie_file": shuffled_movie_path,
                    })

            with open(subject_stim_file, "w", newline="") as f:
                writer = csv.DictWriter(
                    f,
                    fieldnames=["scan_set", "set_order", "movie_order_within_set", "movie_file"]
                )
                writer.writeheader()
                writer.writerows(trial_rows)
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will watch a series of short films (5-10 mins each) totaling about an hour.

        You will receive 1.5 credits for successful participation in this experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is the following: while you watch the movies, you will continuously rate the energy level of the movie at each moment.

        High energy refers to when the movie is intense, stimulating, or active.

        Low energy refers to when the movie is slow, still, or calm.

        High/low energy does not necessarily mean the content is positive or negative, but rather refers to the intensity of the content, no matter the emotional quality.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_3
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        There will be a slider at the bottom of the screen below the movie. Please move the marker along the slider as you watch the movie to indicate the energy-level of what's happening in the movie at that moment.

        All the way to the right indicates maximal energy; all the way to the left indicates minimal energy. In the middle is medium level of energy.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_4
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please ask any questions to the experimenter now.

        When you are ready to practice, please place your fingers on the arrow keys and let the experimenter know you are ready.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (0,1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent key_slider_2
      Code Type = Py
      Begin Routine:
        slider_2_min = min(slider_2.ticks)
        slider_2_max = max(slider_2.ticks)

        # start in the middle / at your init value
        slider_2.markerPos = 5
        slider_2.recordRating(slider_2.markerPos, rt=0)

        # prevents mouse control of the slider
        slider_2.readOnly = True

        defaultKeyboard.clearEvents()
      Each Frame:
        theseKeys = defaultKeyboard.getKeys(
            keyList=['left', 'right'],
            ignoreKeys=['escape'],
            waitRelease=False,
            clear=True
        )

        for key in theseKeys:
            if key.name == 'left':
                slider_2.markerPos = max(slider_2_min, slider_2.markerPos - 1)
            elif key.name == 'right':
                slider_2.markerPos = min(slider_2_max, slider_2.markerPos + 1)

            # store the current slider position as the current rating
            slider_2.recordRating(slider_2.markerPos, rt=key.rt)
    ImageComponent smile_image_2
      image = images/high_battery.png
      pos = (0.6, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent frown_image_2
      image = images/low_battery.png
      pos = (-0.6, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MovieComponent practice_video
      backend = ffpyplayer
      forceEndRoutine = True
      movie = practice_video.mp4
      size = (1.195, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine practice_question
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Comprehension question:

        What was the woman giving the man in addition to the letter?

        a) chocolates
        b) flowers
        c) cash

        Please respond using the a, b, or c keys
    KeyboardComponent key_resp_6
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine question
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    TextComponent question_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    KeyboardComponent key_resp_7
      allowedKeys = 'a','b','c'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instr_3_5
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please use the full range of responses (i.e. do not just use maximum, minimum, and medium). For example, if the scene is moderately calm, you may move the marker 75% of the way to the left. We encourage you to move the slider frequently for even slight changes.

        You will use the arrow keys to move the slider back and forth.

        Also, you are welcome to adjust the volume as you please throughout the task.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ready
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please ask any final questions to the experimenter now.

        Between each of the movies, you will be able to take a short break in case you have any questions.

        Once you are ready to start, let the experimenter know.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent make_json
      Code Type = Py
      Begin Experiment:
        from psychopy import data
        import csv
        import json
        import random

        participant_id = str(expInfo['participant']).strip() or "TEST"
        participant_id = "".join(
            ch if ch.isalnum() or ch in ("-", "_") else "_"
            for ch in participant_id
        )

        resume_flag = str(expInfo.get('resume', 'n')).strip().lower()

        exp_dir = _thisDir if "_thisDir" in globals() else os.getcwd()

        movie_list_file = os.path.join(exp_dir, "movie_list.xlsx")
        stims_dir = os.path.join(exp_dir, "stims")
        os.makedirs(stims_dir, exist_ok=True)

        subject_data_dir = os.path.join(exp_dir, "data", f"sub-{participant_id}")
        os.makedirs(subject_data_dir, exist_ok=True)

        subject_stim_file = os.path.join(stims_dir, f"sub-{participant_id}_stims.csv")
        resume_stim_file = os.path.join(subject_data_dir, f"sub-{participant_id}_resume_stims.csv")
        progress_file = os.path.join(subject_data_dir, f"sub-{participant_id}_progress.json")

        # Create the fixed subject stim order once
        if not os.path.exists(subject_stim_file):
            source_rows = data.importConditions(movie_list_file)

            scan_names = list(source_rows[0].keys())
            scan_sets = {scan_name: [] for scan_name in scan_names}

            for row in source_rows:
                for scan_name in scan_names:
                    source_movie_path = row[scan_name]
                    if source_movie_path not in ("", None):
                        scan_sets[scan_name].append(source_movie_path)

            rng = random.Random(participant_id)

            randomized_scan_names = scan_names[:]
            rng.shuffle(randomized_scan_names)

            trial_rows = []
            for set_order, scan_name in enumerate(randomized_scan_names, start=1):
                movies = scan_sets[scan_name][:]
                rng.shuffle(movies)

                for movie_order_within_set, shuffled_movie_path in enumerate(movies, start=1):
                    trial_rows.append({
                        "scan_set": scan_name,
                        "set_order": set_order,
                        "movie_order_within_set": movie_order_within_set,
                        "movie_file": shuffled_movie_path,
                    })

            with open(subject_stim_file, "w", newline="") as f:
                writer = csv.DictWriter(
                    f,
                    fieldnames=["scan_set", "set_order", "movie_order_within_set", "movie_file"]
                )
                writer.writeheader()
                writer.writerows(trial_rows)

        all_trials = data.importConditions(subject_stim_file)

        # Defaults for a fresh run
        run_stim_file = subject_stim_file
        resume_start_index = 0

        # Resume if requested and a progress file exists
        if resume_flag == "y" and os.path.exists(progress_file):
            with open(progress_file, "r") as f:
                progress = json.load(f)

            resume_start_index = int(progress.get("next_trial_index", 0))
            resume_start_index = max(0, min(resume_start_index, len(all_trials)))

            remaining_trials = all_trials[resume_start_index:]

            with open(resume_stim_file, "w", newline="") as f:
                writer = csv.DictWriter(
                    f,
                    fieldnames=["scan_set", "set_order", "movie_order_within_set", "movie_file"]
                )
                writer.writeheader()
                writer.writerows(remaining_trials)

            run_stim_file = resume_stim_file

        # This is the variable your trials loop should use
        subject_stim_file = run_stim_file
Flow
  Routine instr_1
  Routine instr_2
  Routine instr_3
  Routine instr_3_5
  Routine instr_4
  Routine practice
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $subject_stim_file
    loopType = sequential
    nReps = 1
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    conditions:
      [{'scan_a': '../films_LowerRes/Oxygen_LowerRes.mp4', 'scan_b': '../films_LowerRes/BorrowedTime_LowerRes.mp4', 'scan_c': '../films_LowerRes/PlaceOfMyBirth_LowerRes.mp4'},
      {'scan_a': '../films_LowerRes/AnObjectAtRest_LowerRes.mp4', 'scan_b': '../films_LowerRes/StrayDogs_LowerRes.mp4', 'scan_c': '../films_LowerRes/Scrambled_LowerRes.mp4'},
      {'scan_a': '../films_LowerRes/InnerWorkings_LowerRes.mp4', 'scan_b': '../films_LowerRes/Paperman_LowerRes.mp4', 'scan_c': '../films_LowerRes/FutureBoyfriend_LowerRes.mp4'}]
    Routine trial
    Routine next
  LoopTerminator trials
  Routine end
